; jy-noah3_SpSp_urC

;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>

define delay DC_SpC1
define delay DC_SpC2
define delay DC_SpC3
define delay DC_SpC4
define delay DC_SpC5
define delay DC_SpC6
define delay DN_SpB1
define delay DN_SpB2
define delay DN_SpB3
define delay DN_SpB4
define delay DN_SpB5
define delay DN_SpB6
define delay DN_SpB7

; Delays for 13C HSQC
; URP internal calculations
"cnst33 = 20000"                    ; RF amplitude 1H BURBOP
"cnst34 = 10000"                    ; RF amplitude 13C BIBOP
"d0     = 3u"                       ; 13C HSQC t1
"d2     = 0.5s/cnst2"               ; JCOMP
"d4     = 0.25s/cnst2"              ; 13C INEPT
"d10    = 3u"                       ; COSY t1
"d20    = 3u"                       ; 15N HSQC t1/2
"d24    = 0.25s/cnst4"              ; 15N INEPT
"in0    = inf1/2"                   ; 13C HSQC increment
"in10   = 2*dw"                     ; COSY increment
"in20   = 1000000/(2*cnst40*sfo3)"  ; 15N HSQC increment: cnst40 = SW(15N)
"l1     = 0"                        ; Running counter of total t1 increments for 13C HSQC
"l9     = d9/(p45*20)"              ; ASAP mixing loop counter
"p2     = p1*2"                     ; 1H hard 180
"p4     = p3*2"                     ; 13C hard 180
"p17    = p16*cnst16"               ; Longer gradients for 15N seHSQC v2
"p22    = p21*2"                    ; 15N hard 180
"p33    = 600u"                     ; duration 1H BURBOP
"p34    = 600u"                     ; duration 13C BIBOP
"spw33  = plw1*(cnst33/(1000000/(4*p1)))*(cnst33/(1000000/(4*p1)))"
"spw34  = plw2*(cnst34/(1000000/(4*p3)))*(cnst34/(1000000/(4*p3)))"
"DC_SpC1 = d2-p16-d16-p2-d0*2-p3*2/PI"     ; 13C editing period
"DC_SpC2 = d2-p2+p3*2/PI"                  ; 13C editing period
"DC_SpC3 = p16+d16+p2+d0*2-4u"             ; 13C post-t1, if no editing
"DC_SpC4 = d6-cnst17*p24/2-p19-d16"        ; first spin echo after t1
"DC_SpC5 = d4-p16-d16"                     ; second spin echo after t1
"DC_SpC6 = p16+d16-p1*0.78+de+8u"          ; final spin echo for refocusing gradient
"DN_SpB1 = d24-p22/2"                     ; zz-filter
"DN_SpB2 = d24+p22/2"                     ; zz-filter
"DN_SpB3 = d24-larger(p2,p22)/2"          ; INEPT
"DN_SpB4 = p17+d16+p2+d0*2-4u"            ; 15N post-t1, if no editing
"DN_SpB5 = d26-larger(p2,p22)/2-p19-d16"  ; first spin echo after t1
"DN_SpB6 = d24-larger(p2,p22)/2-p16-d16"  ; second spin echo after t1
"DN_SpB7 = p17+d16-p1*0.78+de+8u"         ; final spin echo for refocusing gradient
"l0     = td1/(nbl*2)"              ; Total number of t1 increments for 13C HSQC
"l1     = 0"                        ; Running counter of total t1 increments for 13C HSQC
"acqt0=0"
baseopt_echo

1 ze
2 30m
3 5m do:f2
4 50u UNBLKGRAD
  ; Cleanup
  4u pl3:f3
  4u pl2:f2
  (p21 ph1):f3
  (p3 ph1):f2
  4u pl1:f1
  p16:gp0
  4u
  (p1 ph1)
  4u
  p16:gp0*-1.37
  4u
  (p1 ph2)
  4u
  p16:gp0*0.77
  50u BLKGRAD
  d1 st0
  50u UNBLKGRAD

  ; MODULE 1
  ; 15N-1H seHSQC version 2

  ; reverse zz-filter
  (p1 ph1):f1
  DN_SpB1
  (p22 ph1):f3
  (p2 ph1):f1
  DN_SpB2
  (p1 ph1):f1
  DN_SpB1
  (p22 ph1):f3
  (p2 ph1):f1
  DN_SpB2            ; 15N-1H: y,  X-1H: z

  ; forward INEPT
  (p1 ph24):f1
  DN_SpB3
  4u
  (center (p2 ph1):f1 (p22 ph1):f3 )
  4u
  DN_SpB3
  (p28 ph1):f1   ; trim pulse 1H
  4u
  (p1 ph2):f1
  (p21 ph20):f3

  ; t1 evolution
  d20
  (p2 ph22):f1
  d20
  p17:gp21*EA
  d16
  (p22 ph1):f3
  4u
  DN_SpB4

  ; reverse INEPT for first component
  (center (p1 ph1):f1 (p21 ph22):f3 )
  p19:gp23
  d16
  DN_SpB5
  (center (p2 ph1):f1 (p22 ph1):f3 )
  DN_SpB5
  p19:gp23
  d16
  (center (p1 ph2):f1 (p21 ph23):f3 )

  ; reverse INEPT for second component
  p16:gp24
  d16
  DN_SpB6
  (center (p2 ph1):f1 (p22 ph1):f3 )
  DN_SpB6
  p16:gp24
  d16
  (p1 ph1):f1

  ; spin echo for refocusing gradient
  DN_SpB7
  (p2 ph1):f1
  4u
  p17:gp22
  d16 pl16:f3
  4u
  goscnp ph28 cpd3:f3
  50u do:f3


  ; Cleanup
  4u pl3:f3
  4u pl2:f2
  (p21 ph1):f3
  (p3 ph1):f2
  50u
  p16:gp0*1.77
  2m st

  ; MODULE 2
  ; 13C-1H seHSQC version 2, with URPs

  ; reverse zz-filter
  (p1 ph1):f1
  d4
  (center (p33:sp33 ph1):f1 (p34:sp34 ph1):f2 )
  d4 pl1:f1
  (p1 ph1):f1
  d4
  (center (p33:sp33 ph1):f1 (p34:sp34 ph1):f2 )
  d4 pl1:f1    ; 13C-1H: y,  12C-1H: z

  ; forward INEPT
#ifdef EDIT
  (p1 ph2):f1
#else
  (p1 ph9):f1
#endif
  d4
  4u
  (center (p33:sp33 ph1):f1 (p34:sp34 ph1):f2 )
  4u
  d4 pl1:f1 pl2:f2
  (p28 ph1):f1   ; trim pulse 1H
  4u
  (p1 ph2):f1 (p3 ph3):f2

  ; t1 evolution
  d0
  (p2 ph5):f1
  d0

  ; optional multiplicity editing
  ; edited part from hsqcedetgpsisp2.3
  ; nonedited part from hsqcetgpsisp2.2
#ifdef EDIT
  p16:gp1*EA
  d16
  DC_SpC1
  (p31:sp18 ph1):f2
  (p2 ph1):f1
  DC_SpC2
  4u
  (p31:sp18 ph1):f2
  2u
  2u pl2:f2
#else
  p16:gp1*EA
  d16
  (p24:sp7 ph1):f2
  4u
  DC_SpC3 pl2:f2
#endif

  ; reverse INEPT for first component
  (center (p1 ph1):f1 (p3 ph5):f2 )
  p19:gp3
  d16
  DC_SpC4
  (center (p2 ph1):f1 (p24:sp7 ph1):f2 )
  DC_SpC4
  p19:gp3
  d16 pl2:f2
#ifdef EDIT
  (center (p1 ph2):f1 (p3 ph7):f2 )
#else
  (center (p1 ph2):f1 (p3 ph6):f2 )
#endif

  ; reverse INEPT for second component
  p16:gp4
  d16
  DC_SpC5
  (center (p33:sp33 ph1):f1 (p34:sp34 ph1):f2 )
  DC_SpC5 pl1:f1 pl2:f2
  p16:gp4
  d16
  (p1 ph1):f1

  ; spin echo for refocusing gradient
  DC_SpC6
  (p2 ph1):f1
  4u
  p16:gp2
  d16 pl12:f2
  4u
  goscnp ph29 cpd2:f2   ; acquire 13C HSQC
  50u do:f2


  ; Purging
  4u pl2:f2
  (p3 ph1):f2
  50u
  p16:gp0*2.32
  2m st

  ; MODULE 3
  ; COSY

  (p1 ph11):f1
  4u
  p16:gp11*EA
  d16
  d10
  (p1 ph1):f1
  4u
  p16:gp11
  d16
  4u
  go=2 ph30


  ; echo/antiecho loop
  1m igrad EA
  1m ip23*2
  1m ip6*2
  1m ip7*2
  30m wr #0 if #0 zd
  lo to 3 times 2

  ; 13C t1 incrementation loop
  1m id0
  1m ip3*2
  1m ip29*2
  1m id10
  1m ip11*2
  1m ip30*2

  ; 15N t1 incrementation check
  "l1 = l1 + 1"
if "l1 % cnst39 == 0"
{
  1m id20
  1m ip20*2
  1m ip28*2
}
  lo to 4 times l0

50u BLKGRAD
exit


ph1=0
ph2=1
ph20=0 2     ; coherence transfer H->N
ph22=0 0 2 2
ph23=1 1 3 3 ; sensitivity enhancement 90 without editing
ph24=3
ph28=0 2 2 0
ph3=0 2     ; coherence transfer H->C
ph5=0 0 2 2
ph6=1 1 3 3 ; sensitivity enhancement 90 without editing
ph7=3 3 1 1 ; sensitivity enhancement 90 with editing
ph9=3
ph29=0 2 2 0
ph11=0 2
ph30=0 2



;gpz0: 17.13%
;gpz1: 80%
;gpz2: 20.1%
;gpz3: 11%
;gpz4: -5%
;gpz11: 10%
;gpz21: 80%
;gpz22: 8.1%
;gpz23: 11%
;gpz24: -5%
;gpnam0: SMSQ10.100
;gpnam0: SMSQ10.100
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam11: SMSQ10.100
;gpnam21: SMSQ10.100
;gpnam22: SMSQ10.100
;gpnam23: SMSQ10.100
;gpnam24: SMSQ10.100

;sp18:wvm:wu180Jcomp: cawurst-40(280 ppm; Jcomp, L2H)
;cpd2:wvm:wudec: cawurst_d-20(220 ppm, 1.4 ms; L2H)


;cnst2: = 1J(CH)
;cnst4: = 1J(NH)
;cnst16: 15N CTP gradient lengthening factor
;cnst17: = -0.5 for Crp60comp.4
;cnst33: = rf amplitude 20000 Hz for BUBI_1H_600u_RF20kHz
;cnst34: = rf amplitude 10000 Hz for BUBI_13C_600u_RF10kHz
;cnst39: 15N HSQC sensitivity factor
;cnst40: 15N SW (ppm)
;d0: 13C t1
;d1: relaxation delay
;d2: 1/2J(CH)
;d4: 1/4J(CH)
;d6: 1/8J(CH) for all multiplicities, 1/4J(CH) for CH only
;d9: ASAP mixing time [0 (no mixing) or 40-60 ms]
;d10: 1H t1
;d16: delay for homospoil/gradient recovery [200 us]
;d20: 15N t1
;d24: 1/4J(NH)
;d26: 1/8J(NH) for all multiplicities, 1/4J(NH) for NH only
;p1: f1 channel -  90 degree high power pulse
;p2: f1 channel - 180 degree high power pulse
;p3: f2 channel -  90 degree high power pulse
;p4: f2 channel - 180 degree high power pulse
;p16: gradient pulse   [1 ms]
;p17: extended gradient pulse for 15N HSQC
;p19: gradient pulse 2 [600 us]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
;p31: f2 channel - 180 degree shaped pulse for inversion with J-compensation
;p33: f1 channel - 180(x) BURBOP [600 us]
;p34: f2 channel - 180 pp BIBOP [600 us]
;p45: f1 channel -  180 degree CAWURST-2 pulse
;pl1: f1 channel - power level for pulse (default)
;pl2: f2 channel - power level for pulse (default)
;pl3: f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;spnam7: Crp60comp.4
;spnam18: Crp60_xfilt.2
;spnam33: BUBI_1H_600u_RF20kHz
;spnam34: BUBI_13C_600u_RF10kHz

